PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['name'], expName, expInfo['date'])
  Experiment info = {'name ': '', 'gender ': '', 'ag': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1710, 1107]
  color = -0.2314, -0.2314, -0.2314
  expName = 4_calibr_sum
  frameRateMsg = Подождите немного, сейчас запустится
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine fin_s
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        corr_sumH = 0
      Begin Routine:
        if resp_H.keys:
            if resp_H.corr == 1:
                corr_sumH += 1
  Routine instr
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    TextComponent text_instr
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Вам нужно будет сравнивать квадраты по размеру.
        Если больше правый квадрат, нажмите кнопку "вправо", еcли левый - то "влево".

        Нажмите "пробел", чтобы приступить.
    KeyboardComponent resp_instr
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine tren
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    CodeComponent code_tr
      Code Type = Auto->JS
    PolygonComponent pol_1
      fillColor = white
      opacity [set every repeat] = op1
      ori [set every repeat] = or1
      pos [set every repeat] = (xPos1, 0)
      shape = rectangle
      size [set every repeat] = (w1, w1)
      startVal [time (s)] = 0.0
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    PolygonComponent pol_2
      fillColor = white
      opacity [set every repeat] = op1
      ori [set every repeat] = or2
      pos [set every repeat] = (xPos2, 0)
      shape = rectangle
      size [set every repeat] = (w2, w2)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_tren
      allowedKeys = 'left','right'
      correctAns = $corr_answ
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_tren
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Если больше правый квадрат, нажмите "вправо", если левый - то "влево"
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  Routine fb_tren
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    CodeComponent code_tr_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp_tren.corr == 1:
            msg = 'Верно!'

        else:
            msg = 'Увы('
    TextComponent text_fb_tren
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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  Routine prev_task
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    TextComponent text_prev
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        А теперь - основное задание.
        Если готовы - нажмите пробел.
    KeyboardComponent resp_pr
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine slider
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    SliderComponent sl_h
      color = 1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = True
      granularity = 0
      initVal = 5
      labels = 'совсем нет','очень'
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_sl
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $q_sl
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  Routine thanks
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    TextComponent text_th
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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      text:
        Спасибо за участие!
  Routine congr
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    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Поздравляем!
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  Routine instr_2
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    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Сейчас тренировочный этап.
        Вам нужно будет сравнивать квадраты по величине.

        Если больше правый квадрат, нажмите "вправо", если левый - то "влево".
        Если готовы - нажмите пробел и переходите к сравнению.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr3
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    TextComponent text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        А теперь - основной этап.  Но время  на выполнение  каждого задания будет ограничено.
        Если готовы - нажмите на пробел.
    KeyboardComponent reesp_instr
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine fb_task
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
        corr_sum = 0
        all_rt = []
        SD_rt = []
        np = None
      Begin Routine:
        if resp.keys:
           all_rt.append(resp.rt)
           if resp.corr == 1:
               msg = 'Верно!'
               corr_sum +=1
           else:
               msg = 'Увы('
        else:
            msg = 'Не успели'
      End Routine:
        mean_rt = sum(all_rt) / len(all_rt)
        tmp = 0.0
        for x in all_rt:
            tmp += (x - mean_rt) ** 2
        variance = tmp / len(all_rt)
        sd_rt = variance ** 0.5

        thisExp.addData('corr_sum', corr_sum)

        thisExp.addData('mean_rt', mean_rt)
        thisExp.addData('sd_rt', sd_rt)
    TextComponent text_fb_task
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine task_L
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    PolygonComponent sq_1
      durationEstim = $time
      fillColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = op1
      ori [set every repeat] = or1
      pos [set every repeat] = (xPos1, 0)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (w1, w1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    PolygonComponent sq_2
      durationEstim = $time
      fillColor = white
      opacity [set every repeat] = op2
      ori [set every repeat] = or2
      pos [set every repeat] = (xPos2, 0)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (w2, w2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    KeyboardComponent resp
      allowedKeys = 'right','left'
      correctAns = $corr_answ
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      storeCorrect = True
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    TextComponent text
      durationEstim = $time
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text = Если больше правый квадрат, нажмите "вправо", если левый - то "влево"
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  Routine fin_sum
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        final_sum = ''
        mean_rt = 0
        SD_rt = 0
      Begin Routine:
        final_sum = 'Всего правильных ответов:%s'%(corr_sum)
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      text [set every repeat] = $final_sum 
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
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  Routine BJW
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    SliderComponent BJW_slider
      color = 1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = True
      granularity = 1
      initVal = 3.5
      labels = 'Совершенно не согласен', 'Не согласен', 'Скорее не согласен', 'Скорее согласен', 'Согласен', 'Полностью согласен'
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextComponent BJW_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
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  Routine instr_BJW
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    TextComponent BJW_inst_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Вам будут предложены утверждения (13).

        Пожалуйста, оцените, насколько каждое утверждение соответствует вашему мнению.

        Для этого перетащите красный кружок мышкой на ту позицию шкалы, которая лучше всего отражает ваше отношение.

        Мы исследуем мир и себя в нем. Пожалуйста, отвечайте честно и вдумчиво.

        Нажмите "пробел", чтобы приступить.
    KeyboardComponent BJW_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TU
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    SliderComponent TU_slider
      color = 1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = True
      granularity = 1
      initVal = 4
      labels = 'Полностью не согласен', 'Не согласен', 'Кое в чем не согласен', 'Ни то, ни другое', 'Кое в чем согласен', 'Согласен', 'Полностью согласен'
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent TU_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
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  Routine TU_insrt
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    TextComponent TU_inst_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Фууух. Вы отлично справляетесь! Еще один блок вопросов.

        Вам будут предложены утверждения (33).

        Пожалуйста, оцените, насколько каждое утверждение соответствует вашему мнению.

        Для этого перетащите красный кружок мышкой на ту позицию шкалы, которая лучше всего отражает ваше отношение.

        Мы исследуем мир и себя в нем. Пожалуйста, отвечайте честно и вдумчиво.

        Нажмите "пробел", чтобы приступить.
    KeyboardComponent TU_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_instr
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    TextComponent main_instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Добрый день! Приглашаем принять участие в эксперименте и спасти одну магистерскую жизнь!

        Студенты РАНХиГС, которые хотят получить баллы за участие, смогут оставить сведения о себе (номер строки) в конце эксперимента.

        Эксперимент запускается только на пк/ноутбуке.

        Для того, чтобы начать, нажмите на пробел
    KeyboardComponent main_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Get_points
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Для студентов РАНХиГСа - введите номер строки для учета баллов , для нестудентов - 2 любые буквы и нажмите на пробел для завершения:
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent gp_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
      store = nothing
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  Routine send_experiment_to_osf
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Сохраняем данные
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    CodeComponent code_3
      Code Type = JS
      End JS Experiment:
        // 1. Disable default browser download
        psychoJS._saveResults = 0;

        // 2. Generate filename
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // 3. Extract data
        let dataObj = psychoJS._experiment._trialsData;

        console.group('DataPipe Debugging');
        console.log('Total rows in dataObj:', dataObj.length);
        console.log('Sample of first row:', dataObj[0]);
        console.log('Sample of last row:', dataObj[dataObj.length - 1]);

        // --- ROBUST CSV CONSTRUCTION ---
        const SEP = ';';

        // A. Collect EVERY unique key present in the entire experiment
        let headers = [];
        dataObj.forEach((trial, index) => {
            if (typeof trial !== 'object' || trial === null) {
                console.warn(`Row ${index} is not a valid object:`, trial);
                return;
            }
            Object.keys(trial).forEach(key => {
                if (!headers.includes(key)) {
                    headers.push(key);
                }
            });
        });

        console.log('Total unique columns identified:', headers.length);
        console.log('Columns list:', headers);

        // B. Helper to escape/quote values
        const formatCell = (val) => {
            if (val === null || val === undefined) return '';
            let str = (typeof val === 'object') ? JSON.stringify(val) : String(val);
            if (str.includes(SEP) || str.includes('"') || str.includes('\n') || str.includes('\r')) {
                str = '"' + str.replace(/"/g, '""') + '"';
            }
            return str;
        };

        // C. Build CSV string
        let csvRows = [];
        csvRows.push(headers.join(SEP));

        dataObj.forEach((rowObj, index) => {
            // Ensure we handle rows that might not be objects
            if (typeof rowObj !== 'object' || rowObj === null) {
                csvRows.push(new Array(headers.length).fill('').join(SEP));
                return;
            }
            const rowValues = headers.map(h => formatCell(rowObj[h]));
            csvRows.push(rowValues.join(SEP));
        });

        let data = csvRows.join('\n');
        console.log('Final CSV string length:', data.length);
        console.groupEnd();

        // 4. Send to OSF via DataPipe
        console.log('Sending to DataPipe...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'H1r1lSmRRNeY',
                filename: filename,
                data: data,
            }),
        }).then(response => {
            console.log('DataPipe Response Status:', response.status);
            return response.json();
        }).then(data => {
            console.log('DataPipe Server Response:', data);
            // quitPsychoJS(); // Commented out for debugging so you can read the console
        }).catch(err => {
            console.error('Save failed:', err);
            // quitPsychoJS();
        });
  Routine results_saved_debug
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    TextComponent results_sent_report
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Ваши данные анонимизированы и сохранены
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  Routine data_saved_debug
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    TextComponent result_data_saved_debug
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Ваши данные анонимизированы и сохранены
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Flow
  Routine Main_instr
  Routine instr_BJW
  LoopInitiator BJW_trials loopType="TrialHandler"
    conditionsFile = BJW.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Text': 'Я считаю, что, по большому счету, заслуживаю того, что происходит со мной.'},
      {'Text': 'Как правило, жизнь ко\xa0мне справедлива.'},
      {'Text': 'Я верю, что обычно получаю то, что заслуживаю.'},
      {'Text': 'В моей жизни в\xa0общем и\xa0целом всё происходит справедливо.'},
      {'Text': 'В моей жизни несправедливость – скорее исключение, чем правило.'},
      {'Text': 'Я считаю, что в\xa0целом в\xa0моей жизни всё справедливо.'},
      {'Text': 'Я думаю, что важные решения, которые касаются меня, обычно справедливы.'},
      {'Text': 'Я считаю, что в\xa0целом мир справедлив.'},
      {'Text': 'Я считаю, что, по\xa0большому счету, люди получают то, что заслуживают.'},
      {'Text': 'Я уверен, что справедливость всегда побеждает несправедливость.'},
      {'Text': 'Я убежден, что, если человек пережил несправедливость, в\xa0будущем это возместится.'},
      {'Text': 'Я твердо уверен, что несправедливость в\xa0самых разных жизненных ситуациях (в семье, учебе и\xa0т. д.) – скорее исключение, чем правило.'},
      {'Text': 'Я думаю, что все, кто принимает важные решения, стремятся быть справедливыми.'}]
    Routine BJW
  LoopTerminator BJW_trials
  Routine instr
  Routine instr_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trening2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'w1': 0.22, 'w2': 0.21, 'corr_answ': 'left', 'op1': 0.17, 'op2': 0.8, 'xPos1': -0.18, 'yPos1': -0.22, 'xPos2': 0.18, 'yPos2': 0.18, 'or1': 45, 'or2': 5, 'time': 1.0},
      {'w1': 0.16, 'w2': 0.15, 'corr_answ': 'left', 'op1': 0.17, 'op2': 0.7, 'xPos1': -0.3, 'yPos1': -0.22, 'xPos2': 0.3, 'yPos2': 0.18, 'or1': 6, 'or2': 47, 'time': 1.0},
      {'w1': 0.17, 'w2': 0.16, 'corr_answ': 'left', 'op1': 0.3, 'op2': 0.18, 'xPos1': -0.3, 'yPos1': -0.2, 'xPos2': 0.3, 'yPos2': 0.2, 'or1': 5, 'or2': 45, 'time': 1.0},
      {'w1': 0.21, 'w2': 0.22, 'corr_answ': 'right', 'op1': 0.54, 'op2': 0.22, 'xPos1': -0.2, 'yPos1': 0.21, 'xPos2': 0.2, 'yPos2': 0.18, 'or1': 37, 'or2': 7, 'time': 1.5},
      {'w1': 0.22, 'w2': 0.23, 'corr_answ': 'right', 'op1': 0.15, 'op2': 0.5, 'xPos1': -0.2, 'yPos1': 0.15, 'xPos2': 0.2, 'yPos2': -0.18, 'or1': 45, 'or2': 3, 'time': 1.5},
      {'w1': 0.28, 'w2': 0.27, 'corr_answ': 'left', 'op1': 0.13, 'op2': 0.85, 'xPos1': -0.18, 'yPos1': -0.22, 'xPos2': 0.18, 'yPos2': 0.18, 'or1': 5, 'or2': 45, 'time': 1.5},
      {'w1': 0.24, 'w2': 0.25, 'corr_answ': 'right', 'op1': 0.13, 'op2': 0.85, 'xPos1': -0.3, 'yPos1': -0.2, 'xPos2': 0.3, 'yPos2': 0.2, 'or1': 0, 'or2': 45, 'time': 1.5}]
    Routine tren
    Routine fb_tren
  LoopTerminator trials
  Routine instr3
  LoopInitiator loop_L loopType="TrialHandler"
    conditionsFile = task_m_s4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'w1': 0.14, 'w2': 0.13, 'corr_answ': 'left', 'op1': 0.15, 'op2': 0.5, 'xPos1': -0.3, 'yPos1': 0.21, 'xPos2': 0.3, 'yPos2': 0.18, 'or1': 45, 'or2': 5, 'time': 2.0},
      {'w1': 0.15, 'w2': 0.14, 'corr_answ': 'left', 'op1': 0.8, 'op2': 0.16, 'xPos1': -0.3, 'yPos1': 0.15, 'xPos2': 0.3, 'yPos2': -0.18, 'or1': 30, 'or2': 15, 'time': 1.5},
      {'w1': 0.17, 'w2': 0.18, 'corr_answ': 'right', 'op1': 0.5, 'op2': 0.2, 'xPos1': -0.2, 'yPos1': -0.22, 'xPos2': 0.2, 'yPos2': 0.18, 'or1': 7, 'or2': 45, 'time': 1.5},
      {'w1': 0.18, 'w2': 0.19, 'corr_answ': 'right', 'op1': 0.51, 'op2': 0.8, 'xPos1': -0.2, 'yPos1': -0.2, 'xPos2': 0.2, 'yPos2': 0.2, 'or1': 45, 'or2': 3, 'time': 0.6},
      {'w1': 0.14, 'w2': 0.15, 'corr_answ': 'right', 'op1': 0.47, 'op2': 0.75, 'xPos1': -0.2, 'yPos1': -0.2, 'xPos2': 0.2, 'yPos2': 0.2, 'or1': 35, 'or2': 8, 'time': 1.5},
      {'w1': 0.15, 'w2': 0.16, 'corr_answ': 'right', 'op1': 0.48, 'op2': 0.15, 'xPos1': -0.2, 'yPos1': 0.21, 'xPos2': 0.2, 'yPos2': 0.18, 'or1': 9, 'or2': 25, 'time': 0.6},
      {'w1': 0.18, 'w2': 0.17, 'corr_answ': 'left', 'op1': 0.4, 'op2': 0.19, 'xPos1': -0.3, 'yPos1': 0.2, 'xPos2': 0.3, 'yPos2': -0.2, 'or1': 45, 'or2': 5, 'time': 1.0},
      {'w1': 0.16, 'w2': 0.17, 'corr_answ': 'right', 'op1': 0.49, 'op2': 0.78, 'xPos1': -0.2, 'yPos1': 0.15, 'xPos2': 0.2, 'yPos2': -0.18, 'or1': 30, 'or2': 5, 'time': 1.0},
      {'w1': 0.14, 'w2': 0.13, 'corr_answ': 'left', 'op1': 0.15, 'op2': 0.5, 'xPos1': -0.3, 'yPos1': 0.21, 'xPos2': 0.3, 'yPos2': 0.18, 'or1': 45, 'or2': 5, 'time': 1.5}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
    Routine task_L
    Routine fb_task
  LoopTerminator loop_L
  LoopInitiator l_slid loopType="TrialHandler"
    conditionsFile = tabl_sl.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'q_sl': 'Это было сложно?'},
      {'q_sl': 'Вы могли контролировать ситуацию?'},
      {'q_sl': 'Насколько результат зависел от Вас?'},
      {'q_sl': 'Насколько успешно получалось сравнивать квадраты?'},
      {'q_sl': 'Вы довольны результатом?'}]
    Routine slider
  LoopTerminator l_slid
  Routine fin_sum
  Routine Get_points
  Routine thanks
  Routine send_experiment_to_osf
